PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999):03d}"', 'session': '001', 'nBlocks': '4', 'topN': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = NBack
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 1.2
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    TextComponent text_trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every frame] = $letter
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    KeyboardComponent key_resp_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_trial
      Code Type = Auto->JS
      Begin Routine:
        outlet.push_sample(["trial_start"])
      End Routine:
        is_target = str(target).strip().lower() == 'true'
        pressed = bool(key_resp_trial.keys)
        if pressed:
            outlet.push_sample(["key_press"])
        if is_target:
            if pressed:
                n_hits += 1
            else:
                n_misses += 1
        else:
            if pressed:
                n_fa += 1
            else:
                n_cr += 1
        thisExp.addData('correct', int(pressed == is_target))
        thisExp.addData('block', block)
        thisExp.addData('N', N)
        thisExp.addData('rt', key_resp_trial.rt if pressed else None)
  Routine welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Te damos la bienvenida!

        A continuación te mostraremos la tarea NBack.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_welcome
      Code Type = Py
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      Before Experiment:
        import hashlib
        import psychopy.logging as log
        from pathlib import Path
        from pylsl import StreamInfo, StreamOutlet

        # Setup LSL outlet for syncing trial events with external lab devices
        # (EEG, heart-rate band, etc.). Markers are simple strings.
        log.info("Creating LSL streams")
        info = StreamInfo("Psychopy", "Markers", 1, 0, "string", "PsychopyUUID0001")
        outlet = StreamOutlet(info)
      Begin Experiment:
        n_blocks = int(expInfo['nBlocks'])
        top_n = int(expInfo['topN'])
        assert 1 <= n_blocks <= 10, "nBlocks must be between 1 and 10"
        assert 2 <= top_n <= 5, "topN must be between 2 and 5"

        # Numeric participant IDs (e.g. "042") map directly to schedules/042.csv.
        # Non-numeric IDs (e.g. "pilot") hash deterministically to a 3-digit code.
        participant_str = str(expInfo['participant'])
        try:
            participant_id = int(participant_str)
            assert 0 <= participant_id <= 999, "numeric participant must be 0..999"
        except ValueError:
            h = hashlib.md5(participant_str.encode()).hexdigest()
            participant_id = int(h, 16) % 1000

        cap = top_n
        schedule_file = f"schedules/{participant_id:03d}.csv"
        assert Path(schedule_file).exists(), (
            f"missing {schedule_file}; run prerandomize.py first"
        )

        # Initialize loop-iteration vars at module scope (via globals()) so the
        # shared `fix` routine's skipIf (`N > cap or block > n_blocks`) evaluates
        # False during the pre-schedule flow (welcome, intro, training) AND so
        # scheduleLoop's per-row injection (`globals()[paramName] = ...`) actually
        # updates the same names — assigning `block = 0` directly here would make
        # `block`/`N` locals to the generated `run()` and shadow the loop values.
        globals()['block'] = 0
        globals()['N'] = 0

        n_hits = n_misses = n_fa = n_cr = 0

        # Per-training accumulators, cleared at the start of each pass through
        # a train{N}_repeat iteration (see code_intro_train{N}).
        train_letters_log = []
        train_target_log = []
        train_pressed_log = []
        train_correct_log = []
        train_n_hits = train_n_misses = train_n_fa = train_n_cr = 0

        outlet.push_sample(["begin_experiment"])
        # duplicate-on-purpose: PsychoPy bug where Settings.Show mouse=False alone leaks the cursor.
        win.mouseVisible = False
  Routine intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarea NBack:
        Se mostrarán una secuencia de letras.
        Presiona la barra espaciadora si la letra presentada es igual a la letra presentada cierto numero de letras antes. A ese número le llamamos N.

        N es diferente en cada bloque.
        Antes de empezar realizarás tres entrenamientos.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_train1
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    TextComponent text_intro_train1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Entrenamiento — Tarea 1-back

        A continuación realizarás una práctica corta para familiarizarte con la tarea.

        Verás una secuencia de 12 letras, una a la vez. Presiona la barra espaciadora cuando la letra que aparece sea igual a la letra inmediatamente anterior (N = 1). Si no es igual, no presiones nada.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_train1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_train1
      Code Type = Auto->JS
      Begin Routine:
        train_letters_log.clear()
        train_target_log.clear()
        train_pressed_log.clear()
        train_correct_log.clear()
        train_n_hits = train_n_misses = train_n_fa = train_n_cr = 0
      End Routine:
        outlet.push_sample(["begin_train1"])
  Routine intro_train2
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    TextComponent text_intro_train2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Entrenamiento — Tarea 2-back

        Ahora practicarás la tarea con un N mayor.

        Verás una secuencia de 12 letras, una a la vez. Presiona la barra espaciadora cuando la letra que aparece sea igual a la letra mostrada 2 posiciones antes (N = 2). Si no es igual, no presiones nada.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_train2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_train2
      Code Type = Auto->JS
      Begin Routine:
        train_letters_log.clear()
        train_target_log.clear()
        train_pressed_log.clear()
        train_correct_log.clear()
        train_n_hits = train_n_misses = train_n_fa = train_n_cr = 0
      End Routine:
        outlet.push_sample(["begin_train2"])
  Routine intro_train3
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    TextComponent text_intro_train3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Entrenamiento — Tarea 3-back

        Última práctica antes del experimento principal.

        Verás una secuencia de 12 letras, una a la vez. Presiona la barra espaciadora cuando la letra que aparece sea igual a la letra mostrada 3 posiciones antes (N = 3). Si no es igual, no presiones nada.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_train3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_train3
      Code Type = Auto->JS
      Begin Routine:
        train_letters_log.clear()
        train_target_log.clear()
        train_pressed_log.clear()
        train_correct_log.clear()
        train_n_hits = train_n_misses = train_n_fa = train_n_cr = 0
      End Routine:
        outlet.push_sample(["begin_train3"])
  Routine displayn
    RoutineSettingsComponent displayn
      skipIf = N > cap or block > n_blocks
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    TextComponent text_displayn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Éste es el comienzo del bloque {block} de {n_blocks}

        Presiona la barra espaciadora si la letra que aparece es igual a la letra que aparece {N} letras antes.

        N = {N}

        [Presiona la barra espaciadora para continuar...]
        """
    KeyboardComponent key_resp_displayn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_displayn
      Code Type = Auto->JS
      Begin Routine:
        outlet.push_sample([f"begin_block_N{N}_block{block}"])
  Routine fix
    RoutineSettingsComponent fix
      skipIf = N > cap or block > n_blocks
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent text_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Este es el fin del experimento.

        ¡Gracias por participar!
  Routine train1
    RoutineSettingsComponent train1
      stopVal [duration (s)] = 1.2
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    TextComponent text_train1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every frame] = $letter
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    KeyboardComponent key_resp_train1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_train1
      Code Type = Auto->JS
      Begin Routine:
        outlet.push_sample(["trial_start"])
      End Routine:
        is_target = str(target).strip().lower() == 'true'
        pressed = bool(key_resp_train1.keys)
        if pressed:
            outlet.push_sample(["key_press"])
        train_letters_log.append(letter)
        train_target_log.append(is_target)
        train_pressed_log.append(pressed)
        train_correct_log.append(pressed == is_target)
        if is_target:
            if pressed:
                train_n_hits += 1
            else:
                train_n_misses += 1
        else:
            if pressed:
                train_n_fa += 1
            else:
                train_n_cr += 1
        thisExp.addData('rt', key_resp_train1.rt if pressed else None)
  Routine train2
    RoutineSettingsComponent train2
      stopVal [duration (s)] = 1.2
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    TextComponent text_train2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every frame] = $letter
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    KeyboardComponent key_resp_train2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_train2
      Code Type = Auto->JS
      Begin Routine:
        outlet.push_sample(["trial_start"])
      End Routine:
        is_target = str(target).strip().lower() == 'true'
        pressed = bool(key_resp_train2.keys)
        if pressed:
            outlet.push_sample(["key_press"])
        train_letters_log.append(letter)
        train_target_log.append(is_target)
        train_pressed_log.append(pressed)
        train_correct_log.append(pressed == is_target)
        if is_target:
            if pressed:
                train_n_hits += 1
            else:
                train_n_misses += 1
        else:
            if pressed:
                train_n_fa += 1
            else:
                train_n_cr += 1
        thisExp.addData('rt', key_resp_train2.rt if pressed else None)
  Routine train3
    RoutineSettingsComponent train3
      stopVal [duration (s)] = 1.2
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    TextComponent text_train3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every frame] = $letter
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    KeyboardComponent key_resp_train3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_train3
      Code Type = Auto->JS
      Begin Routine:
        outlet.push_sample(["trial_start"])
      End Routine:
        is_target = str(target).strip().lower() == 'true'
        pressed = bool(key_resp_train3.keys)
        if pressed:
            outlet.push_sample(["key_press"])
        train_letters_log.append(letter)
        train_target_log.append(is_target)
        train_pressed_log.append(pressed)
        train_correct_log.append(pressed == is_target)
        if is_target:
            if pressed:
                train_n_hits += 1
            else:
                train_n_misses += 1
        else:
            if pressed:
                train_n_fa += 1
            else:
                train_n_cr += 1
        thisExp.addData('rt', key_resp_train3.rt if pressed else None)
  Routine feedback_train1
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    TextComponent text_feedback_train1
      font = Courier New
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_feedback_train1
      allowedKeys = ['space', 's']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_feedback_train1
      Code Type = Py
      Begin Routine:
        total_train = train_n_hits + train_n_misses + train_n_fa + train_n_cr
        correct_train = train_n_hits + train_n_cr
        wrong_train = train_n_misses + train_n_fa
        correct_pct = (100 * correct_train / total_train) if total_train else 0
        should_repeat = train_n_hits == 0

        def _cell(s):
            return f"{str(s):>2}"

        letters_row = " ".join(_cell(L) for L in train_letters_log)
        type_row    = " ".join(_cell("T" if t else "") for t in train_target_log)
        click_row   = " ".join(_cell("C" if p else "") for p in train_pressed_log)
        result_row  = " ".join(_cell("OK" if c else "X") for c in train_correct_log)

        grid_text = (
            f"Letra:    {letters_row}\n"
            f"Objetivo: {type_row}\n"
            f"Tu resp.: {click_row}\n"
            f"Resultado:{result_row}"
        )

        verdict = "Repetiremos el entrenamiento." if should_repeat else "¡Bien hecho!"
        score_text = f"Aciertos: {correct_train}/{total_train}  ({correct_pct:.0f}%)\n{verdict}"

        text_feedback_train1.alignText = 'left'
        text_feedback_train1.setText(grid_text)
        text_feedback_train1_score.setText(score_text)
        text_feedback_train1_score.color = 'darkred' if should_repeat else 'darkgreen'
      End Routine:
        _keys = key_resp_feedback_train1.keys
        _key_list = _keys if isinstance(_keys, list) else ([_keys] if _keys else [])
        if 's' in _key_list:
            train1_repeat.finished = True
        elif 'space' in _key_list and not should_repeat:
            train1_repeat.finished = True
        thisExp.addData('train_n_hits', train_n_hits)
        thisExp.addData('train_n_misses', train_n_misses)
        thisExp.addData('train_n_fa', train_n_fa)
        thisExp.addData('train_n_cr', train_n_cr)
        thisExp.addData('train_correct_pct', correct_pct)
        thisExp.addData('train_should_repeat', should_repeat)
    TextComponent text_feedback_train1_heading
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Resultados — Entrenamiento 1-back
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    TextComponent text_feedback_train1_score
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_train1_close
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = [Presiona la barra espaciadora para continuar...]
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  Routine feedback_train2
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    TextComponent text_feedback_train2
      font = Courier New
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_feedback_train2
      allowedKeys = ['space', 's']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_feedback_train2
      Code Type = Py
      Begin Routine:
        total_train = train_n_hits + train_n_misses + train_n_fa + train_n_cr
        correct_train = train_n_hits + train_n_cr
        wrong_train = train_n_misses + train_n_fa
        correct_pct = (100 * correct_train / total_train) if total_train else 0
        should_repeat = train_n_hits == 0

        def _cell(s):
            return f"{str(s):>2}"

        letters_row = " ".join(_cell(L) for L in train_letters_log)
        type_row    = " ".join(_cell("T" if t else "") for t in train_target_log)
        click_row   = " ".join(_cell("C" if p else "") for p in train_pressed_log)
        result_row  = " ".join(_cell("OK" if c else "X") for c in train_correct_log)

        grid_text = (
            f"Letra:    {letters_row}\n"
            f"Objetivo: {type_row}\n"
            f"Tu resp.: {click_row}\n"
            f"Resultado:{result_row}"
        )

        verdict = "Repetiremos el entrenamiento." if should_repeat else "¡Bien hecho!"
        score_text = f"Aciertos: {correct_train}/{total_train}  ({correct_pct:.0f}%)\n{verdict}"

        text_feedback_train2.alignText = 'left'
        text_feedback_train2.setText(grid_text)
        text_feedback_train2_score.setText(score_text)
        text_feedback_train2_score.color = 'darkred' if should_repeat else 'darkgreen'
      End Routine:
        _keys = key_resp_feedback_train2.keys
        _key_list = _keys if isinstance(_keys, list) else ([_keys] if _keys else [])
        if 's' in _key_list:
            train2_repeat.finished = True
        elif 'space' in _key_list and not should_repeat:
            train2_repeat.finished = True
        thisExp.addData('train_n_hits', train_n_hits)
        thisExp.addData('train_n_misses', train_n_misses)
        thisExp.addData('train_n_fa', train_n_fa)
        thisExp.addData('train_n_cr', train_n_cr)
        thisExp.addData('train_correct_pct', correct_pct)
        thisExp.addData('train_should_repeat', should_repeat)
    TextComponent text_feedback_train2_heading
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Resultados — Entrenamiento 2-back
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    TextComponent text_feedback_train2_score
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_train2_close
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = [Presiona la barra espaciadora para continuar...]
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  Routine feedback_train3
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    TextComponent text_feedback_train3
      font = Courier New
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_feedback_train3
      allowedKeys = ['space', 's']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_feedback_train3
      Code Type = Py
      Begin Routine:
        total_train = train_n_hits + train_n_misses + train_n_fa + train_n_cr
        correct_train = train_n_hits + train_n_cr
        wrong_train = train_n_misses + train_n_fa
        correct_pct = (100 * correct_train / total_train) if total_train else 0
        should_repeat = train_n_hits == 0

        def _cell(s):
            return f"{str(s):>2}"

        letters_row = " ".join(_cell(L) for L in train_letters_log)
        type_row    = " ".join(_cell("T" if t else "") for t in train_target_log)
        click_row   = " ".join(_cell("C" if p else "") for p in train_pressed_log)
        result_row  = " ".join(_cell("OK" if c else "X") for c in train_correct_log)

        grid_text = (
            f"Letra:    {letters_row}\n"
            f"Objetivo: {type_row}\n"
            f"Tu resp.: {click_row}\n"
            f"Resultado:{result_row}"
        )

        verdict = "Repetiremos el entrenamiento." if should_repeat else "¡Bien hecho!"
        score_text = f"Aciertos: {correct_train}/{total_train}  ({correct_pct:.0f}%)\n{verdict}"

        text_feedback_train3.alignText = 'left'
        text_feedback_train3.setText(grid_text)
        text_feedback_train3_score.setText(score_text)
        text_feedback_train3_score.color = 'darkred' if should_repeat else 'darkgreen'
      End Routine:
        _keys = key_resp_feedback_train3.keys
        _key_list = _keys if isinstance(_keys, list) else ([_keys] if _keys else [])
        if 's' in _key_list:
            train3_repeat.finished = True
        elif 'space' in _key_list and not should_repeat:
            train3_repeat.finished = True
        thisExp.addData('train_n_hits', train_n_hits)
        thisExp.addData('train_n_misses', train_n_misses)
        thisExp.addData('train_n_fa', train_n_fa)
        thisExp.addData('train_n_cr', train_n_cr)
        thisExp.addData('train_correct_pct', correct_pct)
        thisExp.addData('train_should_repeat', should_repeat)
    TextComponent text_feedback_train3_heading
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Resultados — Entrenamiento 3-back
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    TextComponent text_feedback_train3_score
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_train3_close
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = [Presiona la barra espaciadora para continuar...]
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  Routine scoreList
    RoutineSettingsComponent scoreList
      skipIf = N > cap or block > n_blocks
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    CodeComponent code_scoreList
      Code Type = Auto->JS
      Begin Routine:
        n_targets = n_hits + n_misses
        n_nontargets = n_fa + n_cr
        miss_rate = n_misses / n_targets if n_targets else 0
        fa_rate = n_fa / n_nontargets if n_nontargets else 0
        failed = miss_rate > 0.5 or fa_rate > 0.5

        thisExp.addData('list_block', block)
        thisExp.addData('list_N', N)
        thisExp.addData('list_letter', list_letter)
        thisExp.addData('list_n_hits', n_hits)
        thisExp.addData('list_n_misses', n_misses)
        thisExp.addData('list_n_fa', n_fa)
        thisExp.addData('list_n_cr', n_cr)
        thisExp.addData('list_miss_rate', miss_rate)
        thisExp.addData('list_fa_rate', fa_rate)
        thisExp.addData('list_failed', failed)

        if failed:
            cap = N - 1
            if cap < 2:
                scheduleLoop.finished = True

        n_hits = n_misses = n_fa = n_cr = 0
  Routine intro_trials
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    TextComponent text_intro_trials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Has terminado el entrenamiento!

        A continuación comienza el experimento principal. Verás varios bloques de letras; antes de cada uno se mostrará el valor de N para ese bloque.

        Recuerda: presiona la barra espaciadora cuando la letra que aparece sea igual a la letra mostrada N posiciones antes. Si no es igual, no presiones nada.

        Tendrás un descanso entre bloques.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_trials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine intro
  LoopInitiator train1_repeat loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine intro_train1
    LoopInitiator trials_train1 loopType="TrialHandler"
      conditionsFile = lists/train_1.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('letter', 'G'), ('target', np.False_)]),
        OrderedDict([('letter', 'H'), ('target', np.False_)]),
        OrderedDict([('letter', 'H'), ('target', np.True_)]),
        OrderedDict([('letter', 'A'), ('target', np.False_)]),
        OrderedDict([('letter', 'H'), ('target', np.False_)]),
        OrderedDict([('letter', 'B'), ('target', np.False_)]),
        OrderedDict([('letter', 'B'), ('target', np.True_)]),
        OrderedDict([('letter', 'F'), ('target', np.False_)]),
        OrderedDict([('letter', 'G'), ('target', np.False_)]),
        OrderedDict([('letter', 'D'), ('target', np.False_)]),
        OrderedDict([('letter', 'D'), ('target', np.True_)]),
        OrderedDict([('letter', 'F'), ('target', np.False_)])]
      Routine fix
      Routine train1
    LoopTerminator trials_train1
    Routine feedback_train1
  LoopTerminator train1_repeat
  LoopInitiator train2_repeat loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine intro_train2
    LoopInitiator trials_train2 loopType="TrialHandler"
      conditions = []
      conditionsFile = lists/train_2.csv
      loopType = sequential
      nReps = 1
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      Routine fix
      Routine train2
    LoopTerminator trials_train2
    Routine feedback_train2
  LoopTerminator train2_repeat
  LoopInitiator train3_repeat loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine intro_train3
    LoopInitiator trials_train3 loopType="TrialHandler"
      conditions = []
      conditionsFile = lists/train_3.csv
      loopType = sequential
      nReps = 1
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      Routine fix
      Routine train3
    LoopTerminator trials_train3
    Routine feedback_train3
  LoopTerminator train3_repeat
  Routine intro_trials
  LoopInitiator scheduleLoop loopType="TrialHandler"
    conditions = []
    conditionsFile = $schedule_file
    loopType = sequential
    nReps = 1
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    Routine displayn
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1 if (N <= cap and block <= n_blocks) else 0
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      conditions:
        [OrderedDict([('letter', 'M'), ('target', np.False_)]),
        OrderedDict([('letter', 'F'), ('target', np.False_)]),
        OrderedDict([('letter', 'I'), ('target', np.False_)]),
        OrderedDict([('letter', 'O'), ('target', np.False_)]),
        OrderedDict([('letter', 'V'), ('target', np.False_)]),
        OrderedDict([('letter', 'V'), ('target', np.True_)]),
        OrderedDict([('letter', 'Q'), ('target', np.False_)]),
        OrderedDict([('letter', 'E'), ('target', np.False_)]),
        OrderedDict([('letter', 'O'), ('target', np.False_)]),
        OrderedDict([('letter', 'O'), ('target', np.True_)]),
        OrderedDict([('letter', 'Y'), ('target', np.False_)]),
        OrderedDict([('letter', 'O'), ('target', np.False_)]),
        OrderedDict([('letter', 'I'), ('target', np.False_)]),
        OrderedDict([('letter', 'I'), ('target', np.True_)]),
        OrderedDict([('letter', 'U'), ('target', np.False_)]),
        OrderedDict([('letter', 'M'), ('target', np.False_)]),
        OrderedDict([('letter', 'M'), ('target', np.True_)]),
        OrderedDict([('letter', 'R'), ('target', np.False_)]),
        OrderedDict([('letter', 'L'), ('target', np.False_)]),
        OrderedDict([('letter', 'L'), ('target', np.True_)]),
        OrderedDict([('letter', 'C'), ('target', np.False_)]),
        OrderedDict([('letter', 'C'), ('target', np.True_)]),
        OrderedDict([('letter', 'W'), ('target', np.False_)]),
        OrderedDict([('letter', 'W'), ('target', np.True_)]),
        OrderedDict([('letter', 'D'), ('target', np.False_)]),
        OrderedDict([('letter', 'C'), ('target', np.False_)]),
        OrderedDict([('letter', 'H'), ('target', np.False_)]),
        OrderedDict([('letter', 'H'), ('target', np.True_)])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
      Routine fix
      Routine trial
    LoopTerminator trials
    Routine scoreList
  LoopTerminator scheduleLoop
  Routine end
