PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nback
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 90
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    TextComponent text_letter
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text [set every frame] = $letter
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    KeyboardComponent key_resp_trial
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_trial
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([f"begin_routine_{blocks.thisN+1}"])
        for i in range(5): # Marks start of experiment
            # arduino.write(b"p")
            outlet.push_sample([f"sync_{i+1}"])
            time.sleep(0.5)

        next_letter_onset = core.getTime() + stimulus_duration + isi
        last_letter_onset = None
        offset_time = next_letter_onset + stimulus_duration
        trial_letters = []
        letter = np.random.choice(all_letters)

        log.exp(f"Beggining of trial, N = {N}")
      Each Frame:
        if core.getTime() >= next_letter_onset:
            last_letter_onset = next_letter_onset
            if len(trial_letters) > N:
                letter_nback = trial_letters[-N]
                if np.random.rand() < p_target:
                    letter = letter_nback # Letter is same as nback
                    log.exp(f"Nback letter: {letter_nback} TARGET")
                else:
                    # Letter is chosen at random from a list of all leters that are
                    # not the nback letter.
                    letter = np.random.choice([i for i in all_letters if i is not letter_nback])
                    log.exp(f"Nback letter: {letter_nback} NON-TARGET")
            else:
                letter = np.random.choice(all_letters)
            trial_letters.append(letter)
            win.flip()
            log.exp(f"Stimulus: {letter}")
            outlet.push_sample([f"trial_letter_{letter_nback}"])

            next_letter_onset = core.getTime() + stimulus_duration + isi
            offset_time = last_letter_onset + stimulus_duration

        if core.getTime() >= offset_time:
            letter = ""
            win.flip()
        #    log.exp("Stimulus offset")
            outlet.push_sample([f"trial_letter_offset_{letter_nback}"])
      End Experiment:
        # arduino.close()
      End Routine:
        outlet.push_sample([f"end_routine_{blocks.thisN+1}"])
        #for i in range(4): # Marks start of experiment
        #    # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)
  Routine intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarea NBack:
        Se mostrarán una secuencia de letras.
        Presiona la barra espaciadora si la letra presentada es igual a la letra presentada cierto numero de letras antes. A ese número le llamamos N.

        N es diferente en cada bloque.
        Antes de empezar verás unos ejemplos.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_nothing
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine displayn
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    TextComponent text_displayn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Éste es el comienzo del bloque {blocks.thisN+1}

        Presiona la barra espaciadora si la letra que aparece es igual a la letra que aparece {N} letras antes.

        N = {N}

        [Presiona la barra espaciadora para continuar...]
        """
    KeyboardComponent key_resp_displayn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_ex1
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    TextComponent text_intro_ex1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación se mostrará un ejemplo para la tarea 1-back
        Presiona la barra espaciadora cuando la letra presentada sea igual a la última letra.

        El valor de N es 1.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_ex1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ex1
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    TextComponent text_ex1_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = X
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    PolygonComponent rect_ex1_1
      fillColor = transparent
      pos = (-0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = B
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    PolygonComponent rect_ex1_2
      fillColor = transparent
      lineColor = red
      pos = (-0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_3
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
      text = H
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    PolygonComponent rect_ex1_3
      fillColor = transparent
      lineColor = red
      pos = (-0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_4
      letterHeight = 0.1
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = H
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    PolygonComponent rect_ex1_4
      fillColor = transparent
      lineColor = green
      pos = (0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_5
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
      text = A
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    PolygonComponent rect_ex1_5
      fillColor = transparent
      lineColor = red
      pos = (0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_6
      letterHeight = 0.1
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
      text = X
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    PolygonComponent rect_ex1_6
      fillColor = transparent
      lineColor = red
      pos = (0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
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    TextComponent text_ex1_array
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      text = X  B  H  H  A  X
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    KeyboardComponent key_resp_ex1
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    TextComponent text_ex1_cue
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = ¡Presiona ahora!
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  Routine intro_ex2
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    TextComponent text_intro_ex2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación se mostrara un ejemplo para la tarea 2-back
        Presiona la barra espaciadora cuando la letra presentada sea igual a la penúltima letra.

        El valor de N es 2.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_ex2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ex2
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    TextComponent text_ex2_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = X
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    PolygonComponent rect_ex2_1
      fillColor = transparent
      pos = (-0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = B
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    PolygonComponent rect_ex2_2
      fillColor = transparent
      pos = (-0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_3
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
      text = A
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    PolygonComponent rect_ex2_3
      fillColor = transparent
      lineColor = red
      pos = (-0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_4
      letterHeight = 0.1
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = B
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    PolygonComponent rect_ex2_4
      fillColor = transparent
      lineColor = green
      pos = (0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_5
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
      text = H
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    PolygonComponent rect_ex2_5
      fillColor = transparent
      lineColor = red
      pos = (0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_6
      letterHeight = 0.1
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
      text = U
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    PolygonComponent rect_ex2_6
      fillColor = transparent
      lineColor = red
      pos = (0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
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    TextComponent text_ex2_array
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      text = X  B  A  B  H  U
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    KeyboardComponent key_resp_ex2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    TextComponent text_ex2_cue
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = ¡Presiona ahora!
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  Routine intro_ex3
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    TextComponent text_intro_ex3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación se mostrará un ejemplo para la tarea 3-back
        Presiona la barra espaciadora cuando la letra presentada sea igual a la ante-penúltima letra.

        El valor de N es 3.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_ex3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ex3
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    TextComponent text_ex3_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = X
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    PolygonComponent rect_ex3_1
      fillColor = transparent
      pos = (-0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = U
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    PolygonComponent rect_ex3_2
      fillColor = transparent
      pos = (-0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_3
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
      text = M
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    PolygonComponent rect_ex3_3
      fillColor = transparent
      pos = (-0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_4
      letterHeight = 0.1
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = X
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    PolygonComponent rect_ex3_4
      fillColor = transparent
      lineColor = green
      pos = (0.03, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_5
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
      text = A
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    PolygonComponent rect_ex3_5
      fillColor = transparent
      lineColor = red
      pos = (0.09, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_6
      letterHeight = 0.1
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
      text = M
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    PolygonComponent rect_ex3_6
      fillColor = transparent
      lineColor = green
      pos = (0.16, -.40)
      shape = rectangle
      size = (0.08, 0.1)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
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    TextComponent text_ex3_array
      letterHeight = 0.05
      pos = (0, -.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
      text = X  U  M  X  A  M
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    KeyboardComponent key_resp_ex3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    TextComponent text_ex3_cue2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3
      text = ¡Presiona ahora!
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    TextComponent text_ex3_cue1
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
      text = ¡Presiona ahora!
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  Routine pretrial
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    TextComponent text_pretrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Ahora empezaremos con el experimento!

        Responderas tareas con diferente N. El valor de N se mostrara al principio de cada bloque, pero no podras ver las letras anteriores o siguientes.

        Continúa si las instrucciones han quedado claras.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_pretrial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Te damos la bienvenida!

        A continuación llevaremos a cabo algunas calibraciones, y te mostraremos la tarea NBack.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_welcome
      Code Type = Py
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      Before Experiment:
        import numpy as np
        import serial
        import psychopy.logging as log
        import string
        import serial
        import time
        from pylsl import StreamInfo, StreamOutlet
        import tobii_research as tr

        # Setup LSL outlet
        log.info("Creating LSL streams")
        info = StreamInfo("Psychopy", "Markers", 1, 0, "string", "PsychopyUUID0001")
        outlet = StreamOutlet(info)

        info_tobii = StreamInfo('Pupilometry', 'Pupilometry', 2, 120, 'float32', 'myuidw43536')
        outlet_tobii = StreamOutlet(info_tobii)

        # Setup serial connection to arduino
        # Used for ttl triggers to EEG amp
        # arduino = serial.Serial("COM5", 9600)

        # Setup eyetracker
        EYETRACKER_ADDRESS = "tobii-prp://TPFC1-010202448011"
        log.info(f"Connecting to tobii device: {EYETRACKER_ADDRESS}")
        et = tr.EyeTracker(EYETRACKER_ADDRESS)

        log.info(f"Eyetracker: {et}")

        def gaze_data_callback(gaze_data):
        #    if gaze_data["left_pupil_validity"]:
        #        log.data(f"Pupil diameter: L {gaze_data['left_pupil_diameter']}")
        #    if gaze_data["right_pupil_validity"]:
        #        log.data(f"Pupil diameter: R {gaze_data['right_pupil_diameter']}")
            outlet_tobii.push_sample([gaze_data['left_pupil_diameter'], gaze_data['right_pupil_diameter']])

        # Experiment Vars
        stimulus_duration = 3
        p_target = 0.2 # Probability of stimulus being target
        letter = ""
        all_letters = list(string.ascii_uppercase)
        all_letters.remove("N") # Testers got confused with the letter N
        isi = 0.5 # Inter-stimulus-interval
      Begin Experiment:
        #for i in range(10): # Marks start of experiment
        #    # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)
        outlet.push_sample(["begin_experiment"])

        # Start the eyetracker
        et.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)

        win.mouseVisible = False
  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Este es el fin del experimento.

        ¡Gracias por participar!
  Routine nasaTLX
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    TextComponent text_mental_demand
      letterHeight = 0.05
      pos = (-.4, .4)
      startVal [time (s)] = 0.0
      text = Exigencia Mental
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    SliderComponent slider_mental_demand
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (-.4, .3)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_physical_demand
      letterHeight = 0.05
      pos = (-.4, .1)
      startVal [time (s)] = 0.0
      text = Exigencia Física
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    SliderComponent slider_physical_demand
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (-0.4, .0)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_temporal_demand
      letterHeight = 0.05
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = Exigencia Temporal
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    SliderComponent slider_temporal_demand
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_effort
      letterHeight = 0.05
      pos = (.4, .4)
      startVal [time (s)] = 0.0
      text = Esfuerzo
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    SliderComponent slider_effort
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (.4, .3)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_performance
      letterHeight = 0.05
      pos = (.4, .1)
      startVal [time (s)] = 0.0
      text = Rendimiento
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    SliderComponent slider_performance
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (0.4, .0)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_frustration
      letterHeight = 0.05
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = Frustración
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    SliderComponent slider_frustration
      forceEndRoutine = False
      granularity = 0
      labels = ("Baja", "", "Alta")
      letterHeight = 0.05
      pos = (0.4, -0.3)
      size = (0.6, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_nasatlx
      letterHeight = 0.02
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = [Presiona barra espaciadora para continuar...]
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    KeyboardComponent key_resp_nasatlx
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_nasatlx
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        outlet.push_sample([f"nasatlx_{blocks.thisN+1}"])
      End Routine:
        win.mouseVisible = False
  Routine intro_nasatlx
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    TextComponent text_intro_nasatlx
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Al terminar cada bloque, se te pedirá que evalues la tarea en seis diferentes escalas:
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    TextComponent text_intro_nasatlx_1
      letterHeight = 0.04
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        - Exigencia Mental: ¿Cuánta actividad mental necesitaste?
        - Exigencia Física: ¿Cuánta actividad física fue necesaria?
        - Exigencia Temporal: ¿Cuanta presión de tiempo sentiste?
    TextComponent text_intro_nasatlx_2
      letterHeight = 0.04
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.5
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      text:
        - Esfuerzo: ¿Qué tanto esfuerzo pusiste en la tarea?
        - Rendimiento: ¿Cómo evaluas tu rendimiento en la tarea?
        - Nivel de Frustración: ¿Qué tanta frustración te produjo la tarea?
    TextComponent text_intro_nasatlx_3
      letterHeight = 0.04
      pos = (0, -0.37)
      startVal [time (s)] = 0.0
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      text:
        Evalua dando click en la barra debajo de cada escala.
        A continuación se mostrará un ejemplo que no se evaluará. Es simplemente para familiarizarte con el instrumento.
        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_nasatlx
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_nasatlx
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine intro_cal
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    TextComponent text_intro_cal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te mostrarémos unos puntos en la pantalla.
        Por favor, fija tu mirada en ellos.
        Con esto calibrarémos el escaner ocular.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_cal
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro_cal
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine calibration
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    PolygonComponent circle_cal_1
      fillColor = white
      pos = (-.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_2
      fillColor = white
      pos = (0.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_3
      fillColor = white
      pos = (-0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 6.2
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_4
      fillColor = white
      pos = (0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 9.3
      stopVal [duration (s)] = 3
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    PolygonComponent circle_cal_5
      fillColor = white
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 12.3
      stopVal [duration (s)] = 3
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    CodeComponent code_cal
      Code Type = Py
      Begin Routine:
        log.info("Start calibration")
        outlet.push_sample(["begin_calibration"])
        calibration = tr.ScreenBasedCalibration(et)

        calibration.enter_calibration_mode()
        points_to_calibrate = [circle_cal_1.pos, circle_cal_2.pos, circle_cal_3.pos, circle_cal_4.pos, circle_cal_5.pos]

        framerate = 60
      Each Frame:
        if t == 0 * framerate:
            status = calibration.collect_data(points_to_calibrate[0][0], points_to_calibrate[0][1])
        elif t == 3.1 * framerate:
            status = calibration.collect_data(points_to_calibrate[1][0], points_to_calibrate[1][1])
        elif t == 6.2 * framerate:
            status = calibration.collect_data(points_to_calibrate[2][0], points_to_calibrate[2][1])
        elif t == 9.3 * framerate:
            status = calibration.collect_data(points_to_calibrate[3][0], points_to_calibrate[3][1])
        elif t == 12.3 * framerate:
            status = calibration.collect_data(points_to_calibrate[4][0], points_to_calibrate[4][1])
      End Routine:
        calibration_result = calibration.compute_and_apply()
        log.info(f"Compute and apply returned {calibration_result.status} and collected at {len(calibration_result.calibration_points)} points.")
        calibration.leave_calibration_mode()
  Routine intro_train1
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    TextComponent text_intro_train1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En seguida entrenarás en la tarea N-back con N =1.
        El entrenamiento termina cuando consigas 5 aciertos.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_train1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train1
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    TextComponent text_train1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $letter
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    KeyboardComponent key_resp_train1
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_train1_feedback
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_text
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    CodeComponent code_train1
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([f"begin_train1"])
        #for i in range(5): # Marks start of experiment
        #    # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)

        next_letter_onset = core.getTime() + stimulus_duration + isi
        last_letter_onset = None
        offset_time = next_letter_onset + stimulus_duration
        trial_letters = []
        letter = np.random.choice(all_letters)
        N_train = 1
        last_is_target = False
        corrects_train1 = 0
        log.exp(f"Beggining of train1, N = {N_train}")
        feedback_text = ""
        last_len_pressed = 0
      Each Frame:
        if key_resp_train1.keys:
            log.data(len(key_resp_train1.keys))
            if key_resp_train1.keys[-1] == "space" and len(key_resp_train1.keys) > last_len_pressed:
                if last_is_target:
                    feedback_text = "¡Correcto!"
        #            feedback_text = f"{key_resp_train1.keys}"
                    text_train1_feedback.color = "limegreen"
                    corrects_train1 += 1
                else:
                    feedback_text = "¡Incorrecto!"
        #            feedback_text = f"{key_resp_train1.keys}"
                    text_train1_feedback.color = "red"
                last_len_pressed += 1

        if core.getTime() >= next_letter_onset:
            last_letter_onset = next_letter_onset
            if len(trial_letters) > N_train:
                letter_nback = trial_letters[-N_train]
                if np.random.rand() < p_target:
                    letter = letter_nback # Letter is same as nback
                    log.exp(f"Nback letter: {letter_nback} TARGET")
                    last_is_target = True
                else:
                    # Letter is chosen at random from a list of all leters that are
                    # not the nback letter.
                    letter = np.random.choice([i for i in all_letters if i is not letter_nback])
                    log.exp(f"Nback letter: {letter_nback} NON-TARGET")
                    last_is_target = False
            else:
                letter = np.random.choice(all_letters)
            trial_letters.append(letter)
            win.flip()
            log.exp(f"Stimulus: {letter}")

            next_letter_onset = core.getTime() + stimulus_duration + isi
            offset_time = last_letter_onset + stimulus_duration

        if core.getTime() >= offset_time:
            letter = ""
            feedback_text = ""
            win.flip()
            text_train1_feedback.color = "transparent"
        #    log.exp("Stimulus offset")

        if corrects_train1 >= 5:
            continueRoutine = False
      End Experiment:
        # arduino.close()
      End Routine:
        outlet.push_sample([f"end_train1"])
        # for i in range(4): # Marks start of experiment
            # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)
  Routine intro_train2
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    TextComponent text_intro_train2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En seguida entrenarás en la tarea N-back con N =2.
        El entrenamiento termina cuando consigas 5 aciertos.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro_train2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train2
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    TextComponent text_train2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $letter
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    KeyboardComponent key_resp_train2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_train2_feedback
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_text
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    CodeComponent code_train2
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([f"begin_train2"])
        #for i in range(5): # Marks start of experiment
        #    # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)

        next_letter_onset = core.getTime() + stimulus_duration + isi
        last_letter_onset = None
        offset_time = next_letter_onset + stimulus_duration
        trial_letters = []
        letter = np.random.choice(all_letters)
        N_train = 2
        last_is_target = False
        corrects_train2 = 0
        log.exp(f"Beggining of train1, N = {N_train}")
        feedback_text = ""
        last_len_pressed = 0
      Each Frame:
        if key_resp_train2.keys:
            log.data(len(key_resp_train2.keys))
            if key_resp_train2.keys[-1] == "space" and len(key_resp_train2.keys) > last_len_pressed:
                if last_is_target:
                    feedback_text = "¡Correcto!"
        #            feedback_text = f"{key_resp_train1.keys}"
                    text_train2_feedback.color = "limegreen"
                    corrects_train2 += 1
                else:
                    feedback_text = "¡Incorrecto!"
        #            feedback_text = f"{key_resp_train1.keys}"
                    text_train2_feedback.color = "red"
                last_len_pressed += 1

        if core.getTime() >= next_letter_onset:
            last_letter_onset = next_letter_onset
            if len(trial_letters) > N_train:
                letter_nback = trial_letters[-N_train]
                if np.random.rand() < .3:
                    letter = letter_nback # Letter is same as nback
                    log.exp(f"Nback letter: {letter_nback} TARGET")
                    last_is_target = True
                else:
                    # Letter is chosen at random from a list of all leters that are
                    # not the nback letter.
                    letter = np.random.choice([i for i in all_letters if i is not letter_nback])
                    log.exp(f"Nback letter: {letter_nback} NON-TARGET")
                    last_is_target = False
            else:
                letter = np.random.choice(all_letters)
            trial_letters.append(letter)
            win.flip()
            log.exp(f"Stimulus: {letter}")

            next_letter_onset = core.getTime() + stimulus_duration + isi
            offset_time = last_letter_onset + stimulus_duration

        if core.getTime() >= offset_time:
            letter = ""
            feedback_text = ""
            win.flip()
            text_train1_feedback.color = "transparent"
        #    log.exp("Stimulus offset")

        if corrects_train2 >= 5:
            continueRoutine = False
      End Experiment:
        # arduino.close()
      End Routine:
        outlet.push_sample([f"end_train2"])
        # for i in range(4): # Marks start of experiment
            # arduino.write(b"p")
        #    outlet.push_sample([f"sync_{i+1}"])
        #    time.sleep(0.5)
Flow
  Routine welcome
  Routine intro_cal
  Routine fix
  Routine calibration
  Routine intro
  Routine intro_ex1
  Routine ex1
  Routine intro_ex2
  Routine ex2
  Routine intro_ex3
  Routine ex3
  Routine intro_train1
  Routine train1
  Routine intro_train2
  Routine train2
  Routine intro_nasatlx
  Routine nasaTLX
  Routine pretrial
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 3
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    conditions:
      [{'N': 1},
      {'N': 2},
      {'N': 3}]
    Routine displayn
    Routine fix
    Routine trial
    Routine nasaTLX
  LoopTerminator blocks
  Routine end
